PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'device_mic': '', 'device_speaker': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = mic_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine record
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    KeyboardComponent record_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent record_mic
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = False
      startVal [time (s)] = 0.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    CodeComponent record_code
      Code Type = Auto->JS
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      Begin Experiment:
        playback_gain = 1
      End Routine:
        record_micClip.gain(playback_gain)
    TextComponent record_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press spacebar when finished recording.
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  Routine playback
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    TextComponent playback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $record_micClip.duration
      text = Playing back sound.
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    SoundComponent playback_sound
      sound [set every repeat] = $record_micClip
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $record_micClip.duration
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  Routine adjust_sound
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    TextboxComponent as_textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    TextComponent as_text
      letterHeight = 0.05
      pos = (0, 0.0933)
      startVal [time (s)] = 0.0
      text = Change sound level.
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    ButtonComponent as_button
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.142)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent as_code
      Code Type = Auto->JS
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      End Routine:
        # get textbox position
        # thisExp.addData('tb_pos0', as_text.getPos()[0])
        # thisExp.addData('tb_pos1', as_text.getPos()[1])

        try:
            playback_gain = float(as_textbox.text)
        except ValueError:
            playback_gain = 1
        thisExp.addData('playback_gain', playback_gain)

        # get polygon position
        # thisExp.addData('as_polygon0', as_polygon.getPos()[0])
        # thisExp.addData('as_polygon1', as_polygon.getPos()[1])
Flow
  LoopInitiator sound_testing loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine record
    Routine playback
    Routine adjust_sound
  LoopTerminator sound_testing
